OpenViBE-Scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Button VRPN Client => #1
  Peripheral name = Button0@host:10000
  Button 1 ON = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Button 1 OFF = OVTK_GDF_EEG_Idling_EEG_Eyes_Closed
  Button 2 ON = OVTK_GDF_Stage_1
  Button 2 OFF = OVTK_GDF_Stage_2
  Button 3 ON = OVTK_StimulationId_SegmentStart
  Button 3 OFF = OVTK_StimulationId_SegmentStop
  Button 4 ON = OVTK_StimulationId_Train
  Button 4 OFF = OVTK_StimulationId_TrainCompleted
  0x8d21ff41 = /home/brain/Desktop/eegamma/Button Client.config
Input stimulations 1=#1.Output 1, Input stimulations 2=#1.Output 2, Input stimulations 3=#1.Output 3, Input stimulations 4=#1.Output 4 -> Stimulation multiplexer => #2
Signal=#0.Signal strea, Stimulations=#2 -> Signal display
  Time Scale = 32
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#0.Signal strea, Stimulation=#2 -> GDF file writer
  Filename = /home/brain/Desktop/eegamma/shell/training.gdf
#2 -> Stimulation listener
  Log level to use = Information

Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
