OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Online scenario
  Run the CSP training and
  classification training scenarios first!

Button VRPN Client => #0
  Peripheral name = Button0@host:10000
  Button 1 ON = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Button 1 OFF = OVTK_GDF_EEG_Idling_EEG_Eyes_Closed
  Button 2 ON = OVTK_GDF_Stage_1
  Button 2 OFF = OVTK_GDF_Stage_2
  Button 3 ON = OVTK_StimulationId_SegmentStart
  Button 3 OFF = OVTK_StimulationId_SegmentStop
  Button 4 ON = OVTK_StimulationId_Train
  Button 4 OFF = OVTK_StimulationId_TrainCompleted
  0x8d21ff41 = /home/brain/Desktop/eegamma/Button Client.config
Input stimulations 1=#0.Output 1, Input stimulations 2=#0.Output 2, Input stimulations 3=#0.Output 3, Input stimulations 4=#0.Output 4 -> Stimulation multiplexer => #1
Acquisition client => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#2.Signal strea, Input stream 2=#1 -> Identity => #3
#3.Output stream 1 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 35
  Pass band ripple (dB) = .5
  0x8d21ff41 = /home/brain/Desktop/eegamma/shell/cfg/temporal-filter.cfg
-> CSP Spatial Filter => #5
  Spatial Fitler Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  0x8d21ff41 = /home/brain/Desktop/eegamma/shell/cfg/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.
  Epoch 1 intervals (in sec) = 0.025
  0x8d21ff41 = /home/brain/Desktop/eegamma/shell/cfg/time-epoch.cfg
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #10
-> Level measure
#10 -> Classifier processor => #12
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to load configuration from = /home/brain/Desktop/eegamma/shell/cfg/svm-classifier.cfg
  Reject class label = OVTK_GDF_100_Watt
  Class 1 label = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Class 2 label = OVTK_GDF_Stage_1
#12.Labels -> Classifier result
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_SegmentStop
  Cue Image 1 = /home/brain/Desktop/eegamma/idle.png
  Stimulation 1 = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Cue Image 2 = /home/brain/Desktop/eegamma/pull.png
  Stimulation 2 = OVTK_GDF_Stage_1
#12.Classification state -> Analog VRPN Server
  Peripheral name = openvibe-vrpn
Signal=#5, Stimulations=#3.Stimulations -> Signal display "Filtered signals"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#3.Stimulations -> Stimulation listener
  Log level to use = Information
Signal=#2.Signal strea, Stimulation=#1 -> GDF file writer
  Filename = /home/brain/Desktop/eegamma/shell/signals/online/online-record-[$core{date}-$core{time}].gdf
