OpenViBE-Scenario
0x790d75b8 = Alexander Morosow
0x9f5c4075 = eegamma CSP trainer
Comment
  Save the configuration of the GDF reader to
  /home/brain/Desktop/eegamma/trained-GDF-file.cfg
Comment
  CSP Training
  The Common Spatial Pattern filter trainer
  is the first scenario to be run on the acquired data.

GDF file reader => #0
  Filename = /home/brain/Desktop/eegamma/shell/training.gdf
  Samples per buffer = 32
#0.EEG stream -> Temporal filter - GPL => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 15
  High cut frequency (Hz) = 35
  Pass band ripple (dB) = .5
  0x8d21ff41 = /home/brain/Desktop/eegamma/shell/cfg/temporal-filter.cfg
Input stream 1=#1, Input stream 2=#0.Stimulations -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Idling" => #3
  Epoch duration (in sec) = 8
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
#3.Epoched signal -> Time based epoching => #4
  Epoch 1 duration (in sec) = 1.
  Epoch 1 intervals (in sec) = 0.025
  0x8d21ff41 = /home/brain/Desktop/eegamma/time-epoch.cfg
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Pulling" => #5
  Epoch duration (in sec) = 8
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Stage_1
#5.Epoched signal -> Time based epoching => #6
  Epoch 1 duration (in sec) = 1.
  Epoch 1 intervals (in sec) = 0.025
  0x8d21ff41 = /home/brain/Desktop/eegamma/time-epoch.cfg
#2.Output stream 2 -> Stimulation Filter => #7
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrainCompleted
  Stimulation range end = OVTK_StimulationId_TrainCompleted
Input stimulations 1=#3.Resynced stimulations, Input stimulations 2=#7, Input stimulations 3=#5.Resynced stimulations -> Stimulation multiplexer => #8
-> Stimulation listener
  Log level to use = Information
Stimulations=#8, Signal condition 1=#4, Signal condition 2=#6 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_TrainCompleted
  Spatial filter configuration = /home/brain/Desktop/eegamma/shell/cfg/csp-spatial-filter.cfg
  Filter dimension = 6
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
Signal=#0.EEG stream, Stimulations=#0.Stimulations -> 0xc67a01dc Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
