OpenViBE-Scenario
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  Classifier-training scenario

GDF file reader => #0
  Filename = /home/brain/Desktop/eegamma/shell/training.gdf
  Samples per buffer = 32
#0.EEG stream -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 63
  Pass band ripple (dB) = .5
  0x8d21ff41 = /home/brain/Desktop/eegamma/temporal-filter.cfg
-> CSP Spatial Filter => #2
  Spatial Fitler Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 1.442817e-001 3.411863e-003 -1.213417e-001 -3.119889e-001 1.115873e-001 1.359580e-001 -1.116613e-001 -3.135968e-001 -1.250939e-001 -1.378700e-002 -2.625042e-001 -1.009421e-001 -2.279613e-001 6.689580e-001 -3.348420e-002 9.899176e-002 -4.863345e-002 4.481541e-001 -2.025669e-001 -9.318723e-002 5.258966e-002 2.090623e-004 -1.451749e-001 -3.856019e-001 -4.710458e-002 9.675494e-002 1.549741e-001 -7.944412e-002 -7.903602e-002 7.455923e-001 -3.815222e-001 2.166322e-001 7.102007e-002 -1.493399e-001 -5.719637e-002 -1.732339e-002 4.253947e-002 -1.286825e-001 -1.415511e-001 1.086118e-001 3.485295e-002 -2.764141e-001 8.364691e-001 -3.726375e-001 4.963272e-002 9.167431e-003 -1.381837e-002 -1.012741e-002 -1.700471e-002 -1.616294e-001 6.193112e-002 -2.344197e-002 -3.390554e-001 2.998192e-001 1.635785e-002 3.717487e-001 -8.495080e-002 8.709944e-002 -4.562827e-001 4.325673e-001 -3.228420e-001 7.993942e-003 -1.115950e-001 -1.922763e-001 2.762776e-001 2.720282e-002 1.158864e-001 -4.858494e-002 -3.275103e-001 2.691000e-001 8.273217e-002 1.568368e-001 6.632540e-002 -6.147631e-002 -4.658877e-001 5.034320e-001 -1.359116e-001 5.664146e-002 -2.065083e-001 3.221159e-001 -2.724882e-001 7.822386e-002 -2.063637e-001 1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  0x8d21ff41 = /home/brain/Desktop/eegamma/shell/cfg/csp-spatial-filter.cfg
Input stream 1=#2, Input stream 2=#0.Stimulations -> Identity => #3
#3.Output stream 2 -> Identity
-> Stimulation Filter => #5
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_StimulationId_TrainCompleted
  Stimulation range end = OVTK_StimulationId_TrainCompleted
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Pulling" => #6
  Epoch duration (in sec) = 8
  Epoch offset (in sec) = .5
  Stimulation to epoch from = OVTK_GDF_Stage_1
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Idling" => #7
  Epoch duration (in sec) = 8
  Epoch offset (in sec) = .5000
  Stimulation to epoch from = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
Input stream 1=#6.Epoched signal, Input stream 2=#7.Epoched signal -> Streamed matrix multiplexer
-> Time based epoching
  Epoch 1 duration (in sec) = 1.
  Epoch 1 intervals (in sec) = 0.025
  0x8d21ff41 = /home/brain/Desktop/eegamma/time-epoch.cfg
-> Simple DSP
  Equation = x*x
-> Signal average
-> 0xc67a01dc Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #13
-> Level measure
Input stimulations 1=#5, Input stimulations 2=#6.Resynced stimulations, Input stimulations 3=#7.Resynced stimulations -> Stimulation multiplexer => #15
-> Display cue image
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_SegmentStop
  Cue Image 1 = /home/brain/Desktop/eegamma/idle.png
  Stimulation 1 = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Cue Image 2 = /home/brain/Desktop/eegamma/pull.png
  Stimulation 2 = OVTK_GDF_Stage_1
-> Stimulation listener
  Log level to use = Information
Triggers=#15, Matrix=#13 -> Stream Switch => #18
  Switch stim for output 1 = OVTK_GDF_EEG_Idling_EEG_Eyes_Open
  Switch stim for output 2 = OVTK_GDF_Stage_1
Stimulations=#15, Features for class 1=#18.Output[0], Features for class 2=#18.Output[1] -> Classifier trainer
  Classifier to use = Linear Discrimimant Analysis (LDA)
  Filename to save configuration to = /home/brain/Desktop/eegamma/shell/cfg/svm-classifier.cfg
  Train trigger = OVTK_StimulationId_TrainCompleted
  Number of partitions for k-fold test = 5
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
